CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:38
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:1
    Select the rule criteria:and (file does contain "_ch00.tif")
    Name to assign these images:red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ch01.tif")
    Name to assign these images:green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ch02.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:DAPI
    Name the output object:DAPI_Nuclei
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:DAPI_Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:DAPI_Nuclei
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:60
    Filter using a maximum measurement value?:Yes
    Maximum value:180
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
ResizeObjects:[module_num:8|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
    Select the input object:Nuclei
    Name the output object:NucleiResize
    Method:Factor
    X Factor:0.5
    Y Factor:0.5
    Z Factor:0.5
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Nuclei
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ShrinkToObjectCenters:[module_num:11|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
    Select the input object:Nuclei
    Name the output object:NucleiToCenters

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:NucleiToCenters
    Name the output image:NucleiToCenterImage
    Select the color format:uint16
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
ConvertImageToObjects:[module_num:13|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
    Select the input image:NucleiToCenterImage
    Name the output object:NucleiCenter
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

RelateObjects:[module_num:14|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
    Parent objects:Nuclei
    Child objects:NucleiCenter
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RescaleIntensity:[module_num:16|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
    Select the input image:green
    Name the output image:RescaleIntensity_green
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:17|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
    Select the input image:RescaleIntensity_green
    Name the output image:Resize_green
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:0.5
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    Interpolation method:Bilinear
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    Additional image count:0

EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:Resize_green
    Name the output image:EnhanceOrSuppressFeatures_green
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:19|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
    Select the input image:EnhanceOrSuppressFeatures_green
    Name the output image:MaskGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:NucleiResize
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    Invert the mask?:No

Threshold:[module_num:20|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
    Select the input image:MaskGreen
    Name the output image:Threshold_green
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
RemoveHoles:[module_num:21|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
    Select the input image:Threshold_green
    Name the output image:RemoveHoles_green
    Size of holes to fill:3

Watershed:[module_num:22|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
    Select the input image:Threshold_green
    Name the output object:Watershed_green
    Use advanced settings?:No
    Generate from:Distance
    Markers:Threshold_green
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:4
    Downsample:1
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:EnhanceOrSuppressFeatures_green
    Segmentation distance transform smoothing factor:1
    Minimum distance between seeds:10
    Minimum absolute internal distance:0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

ResizeObjects:[module_num:23|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
    Select the input object:Watershed_green
    Name the output object:GREEN
    Method:Factor
    X Factor:2
    Y Factor:2
    Z Factor:2
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
MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:GREEN
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:25|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
    Select the objects to filter:GREEN
    Name the output objects:Filter_GREEN
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:26|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
    Parent objects:Nuclei
    Child objects:Filter_GREEN
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RescaleIntensity:[module_num:27|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
    Select the input image:red
    Name the output image:RescaleIntensity_red
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:28|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
    Select the input image:RescaleIntensity_red
    Name the output image:Resize_red
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:0.5
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    Interpolation method:Bilinear
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    Additional image count:0

EnhanceOrSuppressFeatures:[module_num:29|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
    Select the input image:Resize_red
    Name the output image:EnhanceOrSuppressFeatures_red
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:30|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
    Select the input image:EnhanceOrSuppressFeatures_red
    Name the output image:MaskRed
    Use objects or an image as a mask?:Objects
    Select object for mask:NucleiResize
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    Invert the mask?:No

Threshold:[module_num:31|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
    Select the input image:MaskRed
    Name the output image:Threshold_red
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
RemoveHoles:[module_num:32|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
    Select the input image:Threshold_red
    Name the output image:RemoveHoles_red
    Size of holes to fill:3

Watershed:[module_num:33|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
    Select the input image:Threshold_red
    Name the output object:Watershed_red
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:4
    Downsample:1
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:EnhanceOrSuppressFeatures_red
    Segmentation distance transform smoothing factor:4.0464
    Minimum distance between seeds:15
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

ResizeObjects:[module_num:34|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
    Select the input object:Watershed_red
    Name the output object:RED
    Method:Factor
    X Factor:2
    Y Factor:2
    Z Factor:2
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
MeasureObjectSizeShape:[module_num:35|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
    Select object sets to measure:RED
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:36|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
    Select the objects to filter:RED
    Name the output objects:Filter_RED
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:9
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:60
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
RelateObjects:[module_num:37|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
    Parent objects:Nuclei
    Child objects:Filter_RED
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:38|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Filter_RED|Parent_Nuclei,Filter_RED|Location_Center_Y,Filter_RED|Location_Center_Z,Filter_RED|Location_Center_X,Filter_RED|Distance_Minimum_Nuclei,Nuclei|AreaShape_EquivalentDiameter,Nuclei|AreaShape_Volume,Nuclei|Location_Center_Y,Nuclei|Location_Center_Z,Nuclei|Location_Center_X,Nuclei|Children_Filter_RED_Count,Nuclei|Children_Filter_GREEN_Count,Filter_GREEN|Location_Center_Y,Filter_GREEN|Location_Center_X,Filter_GREEN|Location_Center_Z,Filter_GREEN|Parent_Nuclei,Filter_GREEN|Distance_Minimum_Nuclei,NucleiCenter|Parent_Nuclei,NucleiCenter|Distance_Minimum_Nuclei
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Filter_RED
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Filter_GREEN
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NucleiCenter
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
